PsychoPy2experiment version="2024.1.4"
Settings
  Experiment info = {'participant': '', 'USPort': '0xD010'}
  Full-screen window = True
  Monitor = EEGMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = Miltner1999_Threshold
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine iti
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    TextComponent iti_text
      letterHeight = 0.04
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = +
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  Routine instr_1
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    TextComponent Instr_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Welcome, and thank you for participating in this experiment.
        We will now calibrate the intensity of the electrical stimuli.

        You will experience a series of stimuli. For each sensation,
        please indicate how painful you perceive it using the following scale:

        --- Press the space bar to continue ---
    KeyboardComponent instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent trigger_and_mouse_code
      Code Type = Py
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      Begin Experiment:
        import time


        from psychopy import parallel
        parallel.setPortAddress(expInfo['USPort']) # EEGPort 0x0378 or 0xC010
        def sendTrigger(triggerCode):
            if isinstance(triggerCode, np.integer):
                triggerCode = triggerCode.item()
            parallel.setData(triggerCode)
            time.sleep(0.002) #wait 2 ms
            parallel.setData(0) # set Trigger Channel back to 0
            time.sleep(0.002) #wait 2 ms
            parallel.setData(triggerCode)
            time.sleep(0.002) #wait 2 ms
            parallel.setData(0) # set Trigger Channel back to 0
            time.sleep(0.002) #wait 2 ms
            parallel.setData(triggerCode)
            time.sleep(0.002) #wait 2 ms
            parallel.setData(0) # set Trigger Channel back to 0
      Begin Routine:
        win.mouseVisible = False
  Routine pain_scale
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    SliderComponent pain_slider
      forceEndRoutine = False
      granularity = 0
      labels = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
      letterHeight = 0.05
      pos = (0, -0.15)
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    KeyboardComponent pain_resp
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent us_anchor_min
      letterHeight = 0.03
      pos = (-0.5, -0.3)
      startVal [time (s)] = 0.0
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      text:
        not painful
        at all
    TextComponent us_anchor_max
      letterHeight = 0.03
      pos = (0.5, -0.3)
      startVal [time (s)] = 0.0
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      text:
        unbearably
        painful
  Routine us
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    TextComponent us_text
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = +
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    CodeComponent us_code
      Code Type = Py
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      Begin Routine:
        sendTrigger(128)
Flow
  Routine instr_1
  Routine iti
  LoopInitiator forever loopType="TrialHandler"
    loopType = random
    nReps = 1000
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    Routine us
    Routine pain_scale
  LoopTerminator forever
