PsychoPy2experiment version="2024.1.5"
Settings
  Experiment info = {'participant': '', 'order': '1', 'EEGPort': '0x0378', 'USPort': '0xD010'}
  Full-screen window = True
  Monitor = EEGMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = Miltner1999
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine stim_acq
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    CodeComponent marker_code_acq
      Code Type = Py
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      Begin Experiment:
        trial_i = 1
      Begin Routine:
        if cs == "CSp":
            print("Trial " + str(trial_i) + ": CS+")
        if cs == "CSm":
            print("Trial " + str(trial_i) + ": CS-")

        if us == 1:
            print('Shock')
      End Routine:
        trial_i = trial_i + 1
    PolygonComponent stim
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      ori [set every repeat] = orientation
      shape = rectangle
      size = (8, 8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      units = deg
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    ParallelOutComponent p_port
      address = 0x0378
      register = EIO
      startData = cs_trigger
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.005
      syncScreen = True
      syncScreenRefresh = False
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  Routine iti
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    CodeComponent iti_code
      Code Type = Py
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      Begin Routine:
        iti_duration = 3+random()*(5-3)
    TextComponent iti_text
      letterHeight = 0.04
      startVal [time (s)] = 0
      stopVal [duration (s)] = $iti_duration
      text [set every repeat] = +
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  Routine stim_ext
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    CodeComponent marker_code_ext
      Code Type = Py
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      Begin Routine:
        if cs == "CSp":
            print("Trial " + str(trial_i) + ": CS+")
        if cs == "CSm":
            print("Trial " + str(trial_i) + ": CS-")
      End Routine:
        trial_i = trial_i + 1
    PolygonComponent stim_2
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      ori [set every repeat] = orientation
      shape = rectangle
      size = (8, 8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      units = deg
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    ParallelOutComponent p_port_2
      address = 0x0378
      register = EIO
      startData = cs_trigger
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.005
      syncScreen = True
      syncScreenRefresh = False
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  Routine ratings
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    PolygonComponent rating_polygon
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      ori [set every repeat] = orientation
      pos = (0, 0.1)
      shape = rectangle
      size = (0.33, 0.33)
      startVal [time (s)] = 0.0
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    RatingScaleComponent cs_rating
      forceEndRoutine = True
      high = 4
      labels = very negative, neutral, very positive
      low = -4
      markerStart = 0
      pos = 0, -0.65
      scaleDescription = How negative/positive do you feel while seeing this stimulus?
      showAccept = False
      size = 1.0
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
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      End Routine:
        print("Ratings")
  Routine instr_1
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    TextComponent Instr_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Herzlich willkommen und vielen Dank für die Teilnahme an diesem Experiment.


        --- Drücken Sie die Leertaste um fortzufahren ---
    KeyboardComponent instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent mouse_and_trigger_code
      Code Type = Py
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      Begin Experiment:
        import time


        from psychopy import parallel
        parallel.setPortAddress(expInfo['USPort']) # EEGPort 0x0378 or 0xC010
        def sendTrigger(triggerCode):
            if isinstance(triggerCode, np.integer):
                triggerCode = triggerCode.item()
            parallel.setData(triggerCode)
            time.sleep(0.002) #wait 2 ms
            parallel.setData(0) # set Trigger Channel back to 0
            time.sleep(0.002) #wait 2 ms
            parallel.setData(triggerCode)
            time.sleep(0.002) #wait 2 ms
            parallel.setData(0) # set Trigger Channel back to 0
            time.sleep(0.002) #wait 2 ms
            parallel.setData(triggerCode)
            time.sleep(0.002) #wait 2 ms
            parallel.setData(0) # set Trigger Channel back to 0
      Begin Routine:
        win.mouseVisible = False
  Routine instr_2
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    TextComponent instr_2_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        In den nächsten 30 Minuten werden Sie verschiedene Symbole betrachten.
        Ihre Aufgabe ist es dabei, sich auf das Kreuz in der Bildschirmmitte zu konzentrieren.

        ---  Drücken Sie die Leertaste um fortzufahren  ---
    KeyboardComponent instr_2_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice_rating
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    TextComponent practice_text
      letterHeight = 0.04
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      wrapWidth = 1.1
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      text:
        Die Skala reicht von negativ bis positiv.
        Beim ersten Extremwert wirken die Stimuli sehr negativ auf Sie, beim anderen sehr positiv.
        Wenn die Stimuli keine Wirkung auf Sie haben, also weder positiv noch negativ,
        bewegen Sie das Dreieck bitte in der Mitte.

        Nutzen Sie die Pfeiltasten, um den blauen Marker auf dem entsprechenden Wert zu platzieren.
        Drücken Sie Enter um ihre Auswahl zu bestätigen und um mit dem Experiment fortzufahren.
    RatingScaleComponent practice_slider
      forceEndRoutine = True
      high = 4
      labels = sehr negativ, neutral, sehr positiv
      low = -4
      markerStart = 0
      pos = 0, -0.65
      scaleDescription = Wie negativ/positiv wirkt dieser Stimulus auf Sie?
      showAccept = False
      size = 1.0
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
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  Routine instr_experimentator
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    TextComponent instr_e_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Ihre Versuchsleitung wird jetzt die Aufzeichnung starten.
        Haben Sie noch Fragen?

        ---  Bitte geben Sie jetzt Ihrer Versuchsleitung Bescheid  ---
    KeyboardComponent instr_e_resp
      allowedKeys = 'g'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent acq_start_code
      Code Type = Py
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      Begin Routine:
        print("Press G to continue!")
      End Routine:
        print("Start of Acquisiton!")
  Routine start_acq
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    UnknownComponent start_acq_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      syncScreenRefresh = False
      useWindowParams = False
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  Routine short_iti
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    TextComponent short_iti_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine us
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    CodeComponent us_code
      Code Type = Py
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      Begin Routine:
        sendTrigger(us_trigger)
  Routine instr_3
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    TextComponent instr_3_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Zwischendurch sollen Sie regelmäßig angeben, welche Emotionen diese Stimuli in Ihnen auslösen.
        Es gibt dabei keine „richtigen“ oder „falschen“ Antworten, antworten Sie deshalb bitte so ehrlich wie möglich!

        ---  Drücken Sie die Leertaste um fortzufahren  ---
    KeyboardComponent instr_3_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice_prating_int
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    TextComponent pain_text_practice
      letterHeight = 0.035
      pos = (0, 0.075)
      startVal [time (s)] = 0.0
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      text:
        Außerdem sollen Sie die elektrischen Reizebewerten, die Ihnen während des Experiments präsentiert werden.

        Auf der ersten Skala bewerten Sie, wie schmerzhaft/intensiv Sie die elektrischen Reize wahrgenommen haben. Die Skala reicht von "gar nicht schmerzhaft" bis "unerträglich schmerzhaft".

        Nutzen Sie die Pfeiltasten, um den blauen Marker auf dem entsprechenden Wert zu platzieren.
        Drücken Sie Enter um ihre Auswahl zu bestätigen und um mit dem Experiment fortzufahren.
    RatingScaleComponent practice_pain_slider
      forceEndRoutine = True
      high = 10
      labels = gar nicht schmerzhaft, unerträglich schmerzhaft
      low = 0
      markerStart = 0
      pos = 0, -0.65
      scaleDescription = Wie schmerzhaft/intensiv haben Sie den letzten elektrischen Reiz wahrgenommen?
      showAccept = False
      size = 1
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
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  Routine practice_prating_unpl
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    TextComponent pain_text_practice_2
      letterHeight = 0.035
      pos = (0, 0.075)
      startVal [time (s)] = 0.0
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      text:
        Auf der zweiten Skala sollen sie darüberhinaus bewerten wie unangenehm/störend Sie die elektrischen Reize wahrgenommen haben. Diese Skala reicht von "gar nicht unangenehm" bis "sehr unangenehm".

        Nutzen Sie die Pfeiltasten, um den blauen Marker auf dem entsprechenden Wert zu platzieren.
        Drücken Sie Enter um ihre Auswahl zu bestätigen und um mit dem Experiment fortzufahren.
    RatingScaleComponent practice_pain_slider_2
      forceEndRoutine = True
      high = 10
      labels = gar nicht unangenehm, sehr unangenehm
      low = 0
      markerStart = 0
      pos = 0, -0.65
      scaleDescription = Wie unangenehm/störend haben Sie den letzten elektrischen Reiz wahrgenommen?
      showAccept = False
      size = 1
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
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  Routine pain_rating_intensity
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    RatingScaleComponent p_rating_1
      forceEndRoutine = True
      high = 10
      labels = gar nicht schmerzhaft, unerträglich schmerzhaft
      low = 0
      markerStart = 0
      pos = 0, -0.4
      scaleDescription = Wie schmerzhaft/intensiv haben Sie den letzten elektrischen Reiz wahrgenommen?
      showAccept = False
      size = 1.0
      startVal [time (s)] = 0.0
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  Routine paint_rating_unpleasant
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    RatingScaleComponent p_rating_2
      forceEndRoutine = True
      high = 10
      labels = gar nicht unangenehm, sehr unangenehm
      low = 0
      markerStart = 0
      pos = 0, -0.4
      scaleDescription = Wie unangenehm/störend haben Sie den letzten elektrischen Reiz wahrgenommen?
      showAccept = False
      size = 1.0
      startVal [time (s)] = 0.0
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Flow
  Routine instr_1
  Routine instr_2
  Routine instr_3
  Routine practice_rating
  Routine practice_prating_int
  Routine practice_prating_unpl
  Routine instr_experimentator
  LoopInitiator full_acq loopType="TrialHandler"
    loopType = random
    nReps = 2
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    LoopInitiator acq loopType="TrialHandler"
      conditionsFile = $"sequences/acq_"+expInfo['order']+".xlsx"
      loopType = random
      nReps = 1
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      Routine iti
      Routine stim_acq
      Routine us
    LoopTerminator acq
    LoopInitiator acq_rating_trials loopType="TrialHandler"
      conditionsFile = $"sequences/acq_"+expInfo['order']+"_rating.xlsx"
      loopType = random
      nReps = 1
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      Routine short_iti
      Routine ratings
    LoopTerminator acq_rating_trials
    Routine pain_rating_intensity
    Routine paint_rating_unpleasant
  LoopTerminator full_acq
  LoopInitiator full_ext loopType="TrialHandler"
    loopType = random
    nReps = 2
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    LoopInitiator ext loopType="TrialHandler"
      conditionsFile = $"sequences/ext_"+expInfo['order']+".xlsx"
      loopType = random
      nReps = 1
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      Routine iti
      Routine stim_ext
    LoopTerminator ext
    LoopInitiator ext_rating_trials loopType="TrialHandler"
      conditionsFile = $"sequences/ext_"+expInfo['order']+"_rating.xlsx"
      loopType = random
      nReps = 1
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      Routine short_iti
      Routine ratings
    LoopTerminator ext_rating_trials
  LoopTerminator full_ext
